<PlusConfiguration version="2.1" PlusRevision="Plus-2.0.0.2690">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="Reference, Grabber, Stick for Pig Operation Demo Calibrated" Description="Ascension3DG sensors from leftmost slot to the right: 1 Reference, 2  Stick."/>
    <Device
      Id="TrackerDevice"
      Type="Ascension3DG"
      AcquisitionRate="50"
      LocalTimeOffsetSec="0"
      FilterAcWideNotch="1"
      FilterAcNarrowNotch="0"
      FilterDcAdaptive="0"
      FilterLargeChange="0"
      FilterAlpha="0"
	  ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="0" AveragedItemsForFiltering="20"/>
        <DataSource Type="Tool" Id="Stick" BufferSize="500" PortName="1" AveragedItemsForFiltering="20"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Reference"/>
          <DataSource Id="Stick"/>
        </OutputChannel>
      </OutputChannels>
    </Device>
  </DataCollection>
  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    xxOutputDeviceId="TrackerDevice"
    OutputChannelId="TrackerStream">
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="TRANSFORM"/>
      </MessageTypes>
      <TransformNames>
        <Transform Name="StickToReference"/>
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  <CoordinateDefinitions>
    <Transform From="StickTip" To="Stick"
      Matrix="
        0.998683	-0.0399664	0.0321806	201.45
        0.0399871	0.9992	0	7.98596
        -0.0321548	0.00128681	0.999482	-6.42176
        0	0	0	1"
       Error="3.52667" Date="050313_171354"/>
  </CoordinateDefinitions>
  
  <Segmentation
    ApproximateSpacingMmPerPixel="0.078"
    MorphologicalOpeningCircleRadiusMm="0.27"
    MorphologicalOpeningBarSizeMm="1.0"
    RegionOfInterest="27 27 793 589"
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="0"/>
  <PhantomDefinition>
    <Description Name="fCAL" Type="Double-N" Version="2.0" WiringVersion="2.0" Institution="Queen&apos;s University PerkLab"/>
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0"/>
        <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0"/>
        <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0"/>
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0"/>
        <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0"/>
        <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0"/>
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0"/>
        <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0"/>
        <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0"/>
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="104.3 5.0 20.0"/>
        <Landmark Name="#2" Position="104.3 45.0 20.0"/>
        <Landmark Name="#3" Position="104.3 45.0 0.0"/>
        <Landmark Name="#4" Position="104.3 -5.0 0.0"/>
        <Landmark Name="#5" Position="-34.3 45.0 15.0"/>
        <Landmark Name="#6" Position="-34.3 -5.0 20.0"/>
        <Landmark Name="#7" Position="-34.3 -5.0 0.0"/>
        <Landmark Name="#8" Position="-34.3 45.0 0.0"/>
      </Landmarks>
    </Geometry>
  </PhantomDefinition>
  <VolumeReconstruction
    OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0"
    ClipRectangleSize="820 616"
    Interpolation="LINEAR"
    Optimization="FULL"
    Compounding="On"
    FillHoles="Off"/>
  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    DefaultSelectedChannelId="TrackedVideoStream"/>
  <vtkPivotCalibrationAlgo ObjectMarkerCoordinateFrame="Stylus" ReferenceCoordinateFrame="Reference" ObjectPivotPointCoordinateFrame="StylusTip"/>
  <vtkPhantomRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip"/>
  <vtkProbeCalibrationAlgo ImageCoordinateFrame="Image" ProbeCoordinateFrame="Probe" PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference"/>
</PlusConfiguration>
